PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'sex': '001', 'age': '', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0.992,0.992,0.992]
  expName = reactive_intentional_encoding_looped
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Routines
  Routine trial
    ImageComponent a_image
      image [set every frame] = $image_a
      pos = (-0.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = .05
      stopVal [duration (s)] = .05
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    ImageComponent b_image
      image [set every repeat] = $image_b
      pos = (.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = .05
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    TextComponent text_12
      color = black
      font = Helvetica
      letterHeight = 0.03
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = .05
      text = Remember the image pairs
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  Routine test
    TextComponent instruct_text
      color = black
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = Retrieve the associate
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    ImageComponent a_image_retrieve
      image [set every frame] = $image_a
      pos = (-.5, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent correct_pair
      image [set every frame] = $image_correct
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent afc_text
      color = black
      letterHeight = 0.05
      pos = (0, 3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = Select the correct image
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    ImageComponent alternative_1
      image [set every frame] = $image_alternative1
      pos = (-.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    ImageComponent alternative_2
      image [set every frame] = $image_alternative2
      pos = (0, .3)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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  Routine feedback
  Routine Instruction_06
    TextComponent text_10
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.5
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      text:
        Get ready! Each pair of images will only last on the screen for a few sceonds, so pay attention!
    TextComponent text_11
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = Press space bar when you're ready to start the game!
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    ImageComponent image_7
      image [set every frame] = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent image_8
      image = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions_intentional_encoding
    TextComponent text
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_1x, position_1y)
      startVal [time (s)] = 0.05
      text [set every repeat] = $instructions1
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    TextComponent instructions_text2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_2x, position_2y)
      startVal [time (s)] = .05
      text [set every repeat] = $Instructions2
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    KeyboardComponent response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = .05
      store = first key
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    ImageComponent image1
      image [set every frame] = $Image1
      pos [set every frame] = (0.25, -0.05)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = .05
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    ImageComponent image2
      image [set every frame] = $Image2
      pos [set every frame] = (-.25, -.05)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.05
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  Routine instructions_retreival_testing
    TextComponent text_5
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = $(position_1x, position_1y)
      startVal [time (s)] = 0.0
      text [set every frame] = $instructions1
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    TextComponent text_8
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = $(position_2x, position_2y)
      startVal [time (s)] = 0.0
      text [set every frame] = $Instructions2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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    ImageComponent image
      image [set every frame] = $Image1
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (0, 0)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every frame] = $Image2
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (0.52, 0)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every frame] = $Image3
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (0, 0)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every frame] = $Image_4
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (-.52, 0)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent K
      color [set every frame] = black
      font [set every frame] = Arial
      letterHeight [set every frame] = 0.03
      pos [set every frame] = (0, -.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $K_key
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    TextComponent L
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = (0.5, -.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_key
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    TextComponent J
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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  Routine instructions_retreival_testing1
    TextComponent text_3
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = $(position_1x, position_1y)
      startVal [time (s)] = 0.0
      text [set every frame] = $instructions1
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    TextComponent text_4
      color [set every frame] = black
      font [set every frame] = Helvetica
      letterHeight [set every frame] = 0.03
      pos [set every frame] = $(position_2x, position_2y)
      startVal [time (s)] = 0.0
      text [set every frame] = $Instructions2
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    ImageComponent image_3
      image [set every frame] = $Image1
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (0, 0)
      size [set every frame] = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.05
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Flow
  LoopInitiator instruction_intentional_encoding loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = instructions_intentional_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions1', 'Welcome to the memory experiment!'), ('Instructions2', 'Press space to continue!')]),
      OrderedDict([('instructions1', 'In the first part of this task, you will see two pairs of images, side by side, on the left and right hand side of the computer screen.'), ('Instructions2', 'Press space to continue!')]),
      OrderedDict([('instructions1', 'For example, you might see images similar to the ones below.'), ('Instructions2', 'Press space to continue!')]),
      OrderedDict([('instructions1', 'Your job is to try to remember that these images are paired. You can link the images in your memory in any way you wish. For example, you can rehearse them in your memory, or link them through a story.'), ('Instructions2', 'Press space to continue!')]),
      OrderedDict([('instructions1', "It's important that you remember that these  images go together because your memory will later be tested. Specifically, later, you will be shown one image, and asked to recall its pair."), ('Instructions2', 'Press space to continue!')]),
      OrderedDict([('instructions1', 'Get ready! Each pair of images will only last on the screen for a few sceonds, so you will need to pay attention!'), ('Instructions2', 'Press space to continue!')])]
    Routine instructions_intentional_encoding
  LoopTerminator instruction_intentional_encoding
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = intentional_encoding.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([('trial', 1), ('image_a', 'images/flipflopsBlue.png'), ('image_b', 'images/amy_poehler_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 2), ('image_a', 'images/bag_gift.png'), ('image_b', 'images/bill_gates_a.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 3), ('image_a', 'images/ball_8.png'), ('image_b', 'images/courtney_cox_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 4), ('image_a', 'images/ball_baseball.png'), ('image_b', 'images/dakota_fanning_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 5), ('image_a', 'images/balloon.jpg'), ('image_b', 'images/drew_barrymore_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 6), ('image_a', 'images/bandage.jpg'), ('image_b', 'images/ellen_degeneres_b.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 7), ('image_a', 'images/barrel.jpg'), ('image_b', 'images/emma_stone.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 8), ('image_a', 'images/bathrobe.png'), ('image_b', 'images/emma_watson.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')])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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 8:11
    conditionsFile = instructions_intentional_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions1', 'Welcome to the memory experiment!'), ('Instructions2', 'Press space to continue!'), ('Image1', None), ('Image2', None), ('Image3', None), ('Image_4', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', None), ('K_key', None), ('L_key', None)]),
      OrderedDict([('instructions1', 'On each trial of this task, you will see two images on the left and right side of the computer screen, like below.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', None), ('K_key', None), ('L_key', None)]),
      OrderedDict([('instructions1', 'Your job is to memorize that the image pairs go together. You can use any strategy to remember them.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', None), ('K_key', None), ('L_key', None)]),
      OrderedDict([('instructions1', 'For example, you could rehearse them in your memory, or link them through a story.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', None), ('K_key', None), ('L_key', None)])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
    Routine instructions_retreival_testing1
  LoopTerminator trials_4
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 11:17
    conditionsFile = instructions_intentional_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions1', 'Welcome to the memory experiment!'), ('Instructions2', 'Press space to continue!'), ('Image1', None), ('Image2', None), ('Image3', None), ('position_1x', 0), ('position_1y', 0.2), ('position_2x', 0.0), ('position_2y', -0.2)]),
      OrderedDict([('instructions1', 'On each trial of this task, you will see two pairs of images on the left and right hand side of the computer screen.'), ('Instructions2', 'Press space to continue!'), ('Image1', None), ('Image2', None), ('Image3', None), ('position_1x', 0), ('position_1y', 0.2), ('position_2x', 0.0), ('position_2y', -0.2)]),
      OrderedDict([('instructions1', 'For example, on one trial, you might see two images similar to the ones below.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)]),
      OrderedDict([('instructions1', 'Your job is to try to remember that these pairs of images go together. You can link the images in your memory in any way you wish. For example, you can rehearse them in your memory, or link them through a story.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)])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
    Routine instructions_retreival_testing
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = test_encoding.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('image_a', 'images/flipflopsBlue.png'), ('image_correct', 'images/amy_poehler_c.jpg'), ('image_alternative1', 'images/amy_poehler_c.jpg'), ('image_alternative2', 'images/amy_poehler_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 2), ('image_a', 'images/bag_gift.png'), ('image_correct', 'images/bill_gates_a.jpg'), ('image_alternative1', 'images/bill_gates_a.jpg'), ('image_alternative2', 'images/bill_gates_a.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 3), ('image_a', 'images/ball_8.png'), ('image_correct', 'images/courtney_cox_c.jpg'), ('image_alternative1', 'images/courtney_cox_c.jpg'), ('image_alternative2', 'images/courtney_cox_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 4), ('image_a', 'images/ball_baseball.png'), ('image_correct', 'images/dakota_fanning_c.jpg'), ('image_alternative1', 'images/dakota_fanning_c.jpg'), ('image_alternative2', 'images/dakota_fanning_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 5), ('image_a', 'images/balloon.jpg'), ('image_correct', 'images/drew_barrymore_c.jpg'), ('image_alternative1', 'images/drew_barrymore_c.jpg'), ('image_alternative2', 'images/drew_barrymore_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 6), ('image_a', 'images/bandage.jpg'), ('image_correct', 'images/ellen_degeneres_b.jpg'), ('image_alternative1', 'images/ellen_degeneres_b.jpg'), ('image_alternative2', 'images/ellen_degeneres_b.jpg'), ('category_b', 'face')])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
    Routine test
  LoopTerminator trials_3
